PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 3.1.0
  Window size (pixels) = [1280, 800]
  color = white
  expName = BOTBfinal
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Routines
  Routine instructions
    TextComponent InstrText
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        You will now view a series of faces and scenes.
        Each image will be presented on the screen for 3 seconds.

        Please focus only on the image on the screen.
        To each image, respond to the question of "Does the person in the image match the context of the image?".

        Click the Y key for YES, and the N key for NO.
        You can respond as soon as the image is presented.

        Press SPACE to begin.
    KeyboardComponent InstrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    ImageComponent target
      image [set every repeat] = $practiceimages
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_stim
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    TextComponent stimtext
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
      text = +
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  Routine testphase
  Routine instructions2
    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Good job!
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    ImageComponent testimage
      image [set every repeat] = $practiceimages
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1','2','3','4','5','6'
      correctAns = 1, 2, 3 
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent text_13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3
      text = +
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if key_resp_2.keys == '4' or key_resp_2.keys == '5' or key_resp_2.keys == '6':
            continueRoutine=False
    TextComponent feedback3
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Was this decision based on familiarity (F) or recollection (R)?
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'f','r'
      correctAns = f, r
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Thank you for completing the experiment!
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  Routine practice
    ImageComponent imagepractice
      image [set every repeat] = $practiceimages
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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  Routine endpractice
    TextComponent text_6
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Ready for the real thing?

        Does the person match the context?

        Remember, press 'Y' for Yes
        or 'N' for No.

        Press SPACE to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testinstructions
    TextComponent text_7
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Remember:

        Press
        1 for 'definitely-old'
        2 for 'surely-old'
        3 for 'guess-old'

        4 for 'guess-new'
        5 for 'surely-new'
        6 for 'definitely-new'

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructionspractice
    TextComponent text_9
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will again view a series of faces and scenes.
        Each image will be presented on the screen for 3 seconds.

        For each image, select whether you believe you have seen the face before or if the face is new.

        Press:
        1 for 'definitely-old'
        2 for 'surely-old'
        3 for 'guess-old'

        4 for 'guess-new'
        5 for 'surely-new'
        6 for 'definitely-new'

        For example, if you believe you have definitely seen the face before, you would press 1, 2, or 3 depending on how confident you are.

        You can respond as soon as the image is presented.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practicetrial
    ImageComponent practiceimage2
      image [set every repeat] = $practiceimages
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent text_10
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = '1','2','3','4','5','6' 
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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  Routine feedback2
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if key_resp_2.keys == '4' or key_resp_2.keys == '5' or key_resp_2.keys == '6':
            continueRoutine=False
    TextComponent text_16
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Did you study this face in this exact context?

        Yes (Y)
        No (N)
        I do not know (I)
    KeyboardComponent key_resp_12
      allowedKeys [set every repeat] = 'y','n','i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback2_2
  Routine feedback2_3
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if not 'r' in key_resp_3.keys and not 'f' in key_resp_3.keys:
            continueRoutine = False
    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Did you study this face in this exact context?

        Yes (Y)
        No (N)
        I do not know (I)
    KeyboardComponent key_resp_8
      allowedKeys [set every repeat] = 'y','n','i'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
  Routine ISI
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine isi2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine isi3
    TextComponent text_12
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine isi4
    TextComponent text_14
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine isi
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Flow
  Routine instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = botbtest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Daycare_Track/daycare')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Daycare_Track/racetrack')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Hunter_RedCarpet/hunter')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Hunter_RedCarpet/redcarpet')])]
    Routine practice
    Routine isi2
  LoopTerminator trials_3
  Routine instructionspractice
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = botbtest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Daycare_Track/daycare')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Daycare_Track/racetrack')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Hunter_RedCarpet/hunter')]),
      OrderedDict([('practiceimages', '/Users/evimyftaraj1/Desktop/ThesisImagesFinal/Hunter_RedCarpet/redcarpet')])]
    Routine practicetrial
    Routine isi3
  LoopTerminator trials_5
  Routine endpractice
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = botbtest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials
  Routine instructions2
  Routine testinstructions
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = botbtest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine test
    Routine feedback
    Routine feedback2
    Routine isi
  LoopTerminator trials_4
  Routine thanks
